PsychoPy2experiment version="3.0.7"
Settings
  Data filename = u'data/original_data/part_files/%s_%s_%s_%s' % (expInfo['01_Participante (Participant):'],expInfo['10_Idioma preferido (Preferred language):'], expInfo['02_Sesión (Session):'], expName)
  Experiment info = {'01_Participante (Participant):': 'part000', '02_Sesión (Session):': "['A', 'C']", '03_Nombre (First name):': '', '04_Apellido (Last name):': '', '05_Edad (Age):': '', '06_Sexo (Gender):': "['', 'Hombre', 'Mujer']", '07_País de nacimiento (Birth country):': "['', 'México', 'Estados Unidos']", '08_Lugar de residencia (Place of residence):': "['', 'Tucson', 'Hermosillo']", '09_Nivel más alto de formación académica (Highest level of formal education):': "['', 'Menos de la escuela secundaria', 'Escuela Secundaria', 'Un poco de universidad', 'Universidad (diplomatura, licenciatura)', 'Un poco de escuela graduada', 'Máster', 'Doctorado']", '10_Idioma preferido (Preferred language):': "['', 'español', 'inglés']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.7
  Window size (pixels) = [1280, 800]
  expName = LexicalAccess
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Routines
  Routine pracIns
    TextComponent pracLexInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted va a completar un experimento.

        Va a ver un fragmento.

        Después, verá otras palabras.

        Si ve el fragmento, presione el botón verde.

        Si no ve el fragmento, no haga nada.

        Presione el botón blanco para empezar las pruebas de práctica.
    KeyboardComponent pracLex_Start
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine expIns
    TextComponent startExp
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted acaba de completar las pruebas.

        Recuerde:
        Si ve el fragmento, presione el botón verde.

        Si no ve el fragmento, no haga nada.


        Presione el botón blanco para empezar el experimento.
    KeyboardComponent startExpTrials
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine targetExp
    CodeComponent expTarCounter
      Code Type = Py
      Begin Routine:
        targetExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = "Encuentre    " + $eval(targetExp).upper()
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  Routine trialExp
    CodeComponent expSegCounter
      Code Type = Py
      Begin Routine:
        carrierExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierExp)
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    KeyboardComponent seg_key_resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trialSyllable
    TextComponent expSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $leftKey
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    TextComponent expSylAnsCV
      letterHeight = 0.1
      pos = (.5,0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $rightKey
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    TextComponent expSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    KeyboardComponent expSyl_key_resp
      allowedKeys = '2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine syllableExpIns
    TextComponent expSyllableInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted acaba de completar las pruebas.

        Recuerde:
        Verá varias palabras y selecionará la primera sílaba.

        Presione el botón azul si su respuesta está a la izqueirda.

        Presione el botón amarillo si su respuesta está a la derecha.

        Presione el botón blanco para empezar el experimento.
    KeyboardComponent expSyllableStart
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracIns
    TextComponent pracSyllableInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Presione el botón azul si su respuesta está a la izqueirda.

        Presione el botón amarillo si su respuesta está a la derecha.

        Presione el botón blanco para empezar las pruebas de práctica.
    KeyboardComponent pracSyllableStart
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracTrial
    TextComponent pracSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    TextComponent pracSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $leftKey
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    TextComponent pracSylAnsCV
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $rightKey
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    KeyboardComponent pracSyl_key_resp
      allowedKeys = '2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = nothing
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  Routine lexTaleEngInstructions
    TextComponent lexEng_Instr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $lexEng
      wrapWidth = 1.5
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    KeyboardComponent start_LexEng
      allowedKeys = '0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lexEspInstrucciones
    CodeComponent startup_Code
      Code Type = Py
      Begin Experiment:
        if expInfo['02_Sesión (Session):'] == 'A':
            conditionPrac="data/processed_data/exp_files/pracCondA.csv"
            conditionExp="data/processed_data/exp_files/expCondA.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondA.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondA.csv"
            practice = "practiceListA"
            experiment = "stimuliListA"
        elif expInfo['02_Sesión (Session):'] == 'C':
            conditionPrac="data/processed_data/exp_files/pracCondC.csv"
            conditionExp="data/processed_data/exp_files/expCondC.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondC.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondC.csv"
            practice = "practiceListC"
            experiment = "stimuliListC"
        else:
            print('Something went wrong')


        tmp = expInfo['10_Idioma preferido (Preferred language):']
        lang = tmp[0]

        if 'e' == lang:
            preferLang = 'spanish'
            section = 'sectionEsp'
            questionText = 'questionTextEsp'
            language = 'languageEsp'
            instructions = 'Nos gustaría pedir su ayuda para contestar a las siguientes preguntas sobre su historial lingüístico, uso, actitudes y competencia. Esta encuesta ha sido creada con el apoyo del "Center for Open Educational Resources and Language Learning" de la Universidad de Texas en Austin para poder tener un mayor conocimiento sobre los perfiles de hablantes bilingües independientemente de sus diversos orígenes y en diferentes contextos. La encuesta contiene 19 preguntas y le llevará menos de 10 minutos para completar. Esto no es una prueba, por tanto no hay respuestas correctas ni incorrectas. Por favor conteste cada pregunta y responda con sinceridad, ya que solamente así se podrá garantizar el éxito de esta investigación. Muchas gracias por su ayuda.\n\nPresione el botón blanco para continuar.'
            langHist = 'Historial lingüístico\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre su historial lingüístico marcando la escala según la leyenda.\n\nPresione el botón "blanco" para continuar.'
            langUse = 'Uso de lenguas\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre su uso de lenguas marcando la escala según la leyenda. El uso total de todas las preguntas en cada pregunta debe llegar al 100%.\n\nPresione el botón blanco para continuar.'
            langProf = 'Competencia\n\nEn esta sección, nos gustaría que considerara su competencia de lengua marcando en la escala de 0 a 6.\n\nPresione el botón blanco para continuar.'
            langAtt = 'Actitudes\n\nEn esta sección, nos gustaría que contestara a las siguientes afirmaciones sobre actitudes lingüísticas marcando en la escala de 0 a 6.\n\nPresione el botón blanco para continuar.'
            lexEsp = '''En este test, encontrará 90 secuencias de letras que parecen "españolas". Solo algunas de ellas son palabras de verdad.
                        \nPor favor, señale las palabras que usted conoce (aquellas que está convencido que son palabras españolas, incluso aunque no seas capaz de dar el significado preciso).
                        \nSi piensa que la es una palabra española, presione el botón verde para indicar "si" y si no, presione el botón rojo para indicar "no".
                        \nTiene todo el tiempo que quiera para hacer cada decisión.
                        \nPresione el botón blanco para empezar.'''
            lexEng = '''En este test, encontrará 60 secuencias de letras que parecen "inglesas". Solo algunas de ellas son palabras de verdad.
                        \nPor favor, señale las palabras que usted conoce (aquellas que está convencido que son palabras inglesas, incluso aunque no seas capaz de dar el significado preciso).
                        \nSi piensa que la es una palabra inglésa, presione el botón verde para indicar "si" y si no, presione el botón rojo para indicar "no".
                        \nTiene todo el tiempo que quiera para hacer cada decisión.
                        \nPresione el botón blanco para empezar.'''
            labHist1 = '0 = Desde al nacimiento     20+ = 20 o más años'
            labHist2 = '0 = Tan pronto como recuerdo     20+ = aún no'
            labHist3 = '0 = Nunca                          20+ = 20 o más años'
            labUse = 'El uso total de todas las lenguas en cada pregunta debe llegar al 100%'
            labProf = '0 = No muy bien                                   6 = muy bien'
            labAtt = '0 = No estoy de acuerdo                     6 = Estoy de acuerdo'
        elif 'i' == lang:
            preferLang = 'english'
            section = 'sectionEng'
            questionText = 'questionTextEng'
            language = 'languageEng'
            instructions = '''We would like to ask you to help us by answering the following questions concerning your language history, use,
        attitudes, and proficiency. This survey was created with support from the Center for Open Educational Resources
        and Language Learning at the University of Texas at Austin
        to better understand the profiles of bilingual speakers in diverse settings with diverse backgrounds. The survey
        consists of 19 questions and will take less than 10 minutes to complete. This is not a test, so there are no right or
        wrong answers. Please answer every question and give your answers sincerely. Thank you very much for your help.
        \nPress the white button to continue'''
            langHist = 'Language history\n\nIn this section, we would like you to answer some factual questions about your language history by marking the scale in the appropriate location.\n\nPress the white button to begin.'
            langUse = 'Language use\n\nIn this section, we would like you to answer some questions about your language use by marking the scale in the appropriate location. Total use for all languages in a given question should equal 100%.\n\nPress the white button to begin.'
            langProf = 'Language proficiency\n\nIn this section, we would like you to rate your language proficiency by marking the scale in the appropriate location from 0 to 6.\n\nPress the white button to begin.'
            langAtt = 'Language attitudes\n\nIn this section, we would like you to respond to statements about language attitudes by marking the scale in the appropriate location from 0-6.\n\nPress the white button to begin.'
            lexEsp = '''En este test, encontrará 90 secuencias de letras que parecen "españolas". Solo algunas de ellas son palabras de verdad.
                        \nPor favor, señale las palabras que usted conoce (aquellas que está convencido que son palabras españolas, incluso aunque no seas capaz de dar el significado preciso).
                        \nSi piensa que la es una palabra española, presione el botón verde para indicar "si" y si no, presione el botón rojo para indicar "no".
                        \nTiene todo el tiempo que quiera para hacer cada decisión.
                        \nPresione el botón blanco para empezar.'''
            lexEng = '''This test consists of 60 trials, in each of which you will see a string of letters.
                        \nYour task is to decide whether this is an existing English word or not.
                        \nIf you think it is an existing English word, press the green button for "sí" and if you think it is not an existing English word, press the red button for "no". If you are sure that the word exists, even if you do not know its exact meaning, you may still respond "sí". But if you are not sure if it is an existing word, you should respond "no".
                        \nYou have as much time as you like for each decision.
                        \nPress the white button to start.'''
            labHist1 = '0 = Since birth     20+ = 20 or more years'
            labHist2 = '0 = As long as I can remember     20+ = Not yet comfortable'
            labHist3 = '0 = Never                                20+ = 20 or more years'
            labUse = 'The total usage of all languages must equal 100%'
            labProf = '0 = Not very well                                   6 = Very well'
            labAtt = '0 = Disagree                                       6 = Agree'
        else:
            instructions = 'Por favor, hable con el investigador.\n\nPlease talk to the experimenter.'
    TextComponent lexEsp_Instr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $lexEsp
      wrapWidth = 1.5
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    KeyboardComponent start_LexEsp
      allowedKeys = '0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lexTaleEsp
    TextComponent esp_Word
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent esp_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent esp_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEsp_key_resp
      allowedKeys = '1','4'
      correctAns = $corrAnsEspV
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
  Routine lexTaleEng
    TextComponent eng_Word
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent eng_Yes
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent eng_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEng_key_resp
      allowedKeys = '1','4'
      correctAns = $corrAnsEngV
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
  Routine gracias
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas Gracias!
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  Routine instructions_blp
    TextComponent text_instructions
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $instructions
      wrapWidth = 1.5
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    KeyboardComponent key_resp_instructions
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lang_hist_ins
    TextComponent text_lang_his_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langHist
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_hist
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_history
    TextComponent text_section_lang_hist
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_use_ins
    TextComponent text_lang_use_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langUse
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_use
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_use
    TextComponent text_section_lang_use
      color = black
      letterHeight = 0.1
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_use_question
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_use_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_use_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_blp_use
      forceEndRoutine = True
      high = 10
      labels = 0%,50%,100%
      low = 0
      markerStart = 5
      pos = 0,-0.4
      scaleDescription = $labUse
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_prof_ins
    TextComponent text_lang_prof_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langProf
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_prof_ins
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_proficiency
    TextComponent text_section_lang_prof
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_prof_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_prof_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_prof_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_prof
      forceEndRoutine = True
      high = 6
      labels = 0,3,6
      low = 0
      markerStart = 3
      pos = 0, -0.4
      scaleDescription = $labProf
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_att_ins
    TextComponent text_lang_att_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langAtt
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_att_ins
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_attitudes
    TextComponent text_lang_att_section
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_att_ques
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_prof_att
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_att_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_att
      forceEndRoutine = True
      high = 6
      labels = 0,3,6
      low = 0
      markerStart = 3
      pos = 0, -0.4
      scaleDescription = $labAtt
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine targetPrac
    CodeComponent pracTarCounter
      Code Type = Py
      Begin Routine:
        targetPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracSegTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text [set every repeat]:
        #"Encuentre    " + $eval(targetPrac).upper()
  Routine trialPrac
    CodeComponent pracSegCounter
      Code Type = Py
      Begin Routine:
        carrierPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracSegCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierPrac)
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    KeyboardComponent pracSeg_key_resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = nothing
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  Routine language_history_2
    TextComponent text_section_lang_hist_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang_2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_2
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_2
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist2
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_history_3
    TextComponent text_section_lang_hist_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_3
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang_3
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_3
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_3
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist3
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine descanso
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if expTarLoop.thisN != 23:
            continueRoutine = False
    TextComponent descansar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Tome un descanso de dos minutos.

        Para continuar sin descanso o uno más corto, presione el botón blanco!
    KeyboardComponent key_resp_continue
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine isi_halfsec
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine lexDesPrac
    TextComponent text_Word
      letterHeight = 0.2
      startVal [time (s)] = 1.12
      text [set every repeat] = $Word
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    TextComponent text_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -.5]
      startVal [time (s)] = 1.12
      text = sí
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    TextComponent text_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -.5]
      startVal [time (s)] = 1.12
      text = no
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    KeyboardComponent lexEsp_key_resp_2
      allowedKeys = '1','4'
      correctAns = $corrAnsLexical
      forceEndRoutine = True
      startVal [time (s)] = 1.12
      store = first key
      storeCorrect = True
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    TextComponent text_Mask
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [time (s)] = 1
      text [set every repeat] = $Mask
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    TextComponent text_Prime
      letterHeight = 0.2
      startVal [time (s)] = 1
      stopVal [time (s)] = 1.12
      text [set every repeat] = $Prime
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Flow
  Routine lexEspInstrucciones
  LoopInitiator trials_debug_1 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    LoopInitiator lexEspLoop loopType="TrialHandler"
      conditionsFile = data/processed_data/exp_files/lexTaleListEsp.csv
      loopType = sequential
      nReps = 1
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      Routine lexTaleEsp
    LoopTerminator lexEspLoop
  LoopTerminator trials_debug_1
  LoopInitiator trials_debug_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine pracIns
    LoopInitiator pracTrialLoop loopType="TrialHandler"
      conditionsFile = LexicalAccess.csv
      loopType = random
      nReps = 1
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      Routine lexDesPrac
      Routine isi_halfsec
    LoopTerminator pracTrialLoop
  LoopTerminator trials_debug_2
  LoopInitiator trials_debug_3 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine expIns
    Routine descanso
    Routine targetExp
    Routine isi_halfsec
    LoopInitiator expTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $conditionExp
      loopType = random
      nReps = 1
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      Routine trialExp
    LoopTerminator expTrialLoop
  LoopTerminator trials_debug_3
  LoopInitiator trials_debug_4 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine syllablePracIns
    LoopInitiator sylPracLoop loopType="TrialHandler"
      conditionsFile = $conditionSylPrac
      loopType = random
      nReps = 1
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      Routine syllablePracTrial
    LoopTerminator sylPracLoop
    Routine syllableExpIns
    LoopInitiator syllableLoop loopType="TrialHandler"
      conditionsFile = $conditionSylExp
      loopType = random
      nReps = 1
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      Routine trialSyllable
    LoopTerminator syllableLoop
  LoopTerminator trials_debug_4
  LoopInitiator trials_debug_5 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine lexTaleEngInstructions
    LoopInitiator lexEngLoop loopType="TrialHandler"
      conditionsFile = data/processed_data/exp_files/lexTaleListEng.csv
      loopType = sequential
      nReps = 1
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      Routine lexTaleEng
    LoopTerminator lexEngLoop
  LoopTerminator trials_debug_5
  LoopInitiator trials_debug_6 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine instructions_blp
    Routine lang_hist_ins
    LoopInitiator trials_blp_hist loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
        OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
        OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
        OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
      Routine language_history
    LoopTerminator trials_blp_hist
    LoopInitiator trials_blp_hist_2 loopType="TrialHandler"
      Selected rows = 2:4
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
        OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
        OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
        OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
      Routine language_history_2
    LoopTerminator trials_blp_hist_2
    LoopInitiator trials_blp_hist_3 loopType="TrialHandler"
      Selected rows = 4:12
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine language_history_3
    LoopTerminator trials_blp_hist_3
    Routine lang_use_ins
    LoopInitiator trials_blp_use loopType="TrialHandler"
      Selected rows = 12:27
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine language_use
    LoopTerminator trials_blp_use
    Routine lang_prof_ins
    LoopInitiator trials_blp_prof loopType="TrialHandler"
      Selected rows = 27:35
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine language_proficiency
    LoopTerminator trials_blp_prof
    Routine lang_att_ins
    LoopInitiator trials_blp_att loopType="TrialHandler"
      Selected rows = 35:43
      conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine language_attitudes
    LoopTerminator trials_blp_att
  LoopTerminator trials_debug_6
  Routine gracias
