PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data/original_data/part_files/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': 'part001', 'session': 'A', 'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.5
  Window size (pixels) = [1280, 800]
  expName = Syllabification
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Routines
  Routine trial
    CodeComponent pracSegCounter
      Code Type = Py
      Begin Routine:
        carrierPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracSegCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierPrac)
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    KeyboardComponent pracSeg_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = nothing
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  Routine pracIns
    TextComponent pracSegInstr
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted va a completar un experimento.

        Va a ver un target

        Después, verá otras palabras.

        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent pracSeg_Start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine target
    CodeComponent pracTarCounter
      Code Type = Py
      Begin Routine:
        targetPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracSegTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        "Encuentre    " + $eval(targetPrac)
  Routine expIns
    TextComponent startExp
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted acaba de completar las pruebas.

        Recuerde:
        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.


        Presione 'la barra' para empezar el experimento.
    KeyboardComponent startExpTrials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI
    TextComponent interstimulibr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine targetExp
    CodeComponent expTarCounter
      Code Type = Py
      Begin Routine:
        targetExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = "Encuentre    " + $eval(targetExp)
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  Routine trialExp
    CodeComponent expSegCounter
      Code Type = Py
      Begin Routine:
        carrierExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierExp)
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    KeyboardComponent seg_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trialSyllable
    TextComponent expSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent expSylAnsCV
      letterHeight = 0.1
      pos = (.5,0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    TextComponent expSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    KeyboardComponent expSyl_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine syllableExpIns
    TextComponent expSyllableInstr
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Recuerde:
        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar el experimento.
    KeyboardComponent expSyllableStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracIns
    TextComponent pracSyllableInstr
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent pracSyllableStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracTrial
    TextComponent pracSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    TextComponent pracSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent pracSylAnsCV
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    KeyboardComponent pracSyl_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = nothing
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  Routine lexTaleEngInstructions
    KeyboardComponent start_LexEng
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent lexEng_Instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test consists of 90 trials, in each of which you will see a string letters.
        Your task is to decide whether this is an existing Spanish word or not.
        If you think it is an existing Spanish word, press 's' for 'yes' and if you think it is not an existing Spanish word, press 'n' for 'no'.
        If you are sure that the word exists, even if you don't know its exact meaning, you may still respond 'yes'.
        But if you are not sure if it is an existing word, you should respond 'no'.
        You have as much time as you like for each decision.
        Press space bar to start.
  Routine lexEspInstrucciones
    KeyboardComponent start_LexEsp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent lexEsp_Instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test consists of 90 trials, in each of which you will see a string letters.
        Your task is to decide whether this is an existing Spanish word or not.
        If you think it is an existing Spanish word, press 's' for 'yes' and if you think it is not an existing Spanish word, press 'n' for 'no'.
        If you are sure that the word exists, even if you don't know its exact meaning, you may still respond 'yes'.
        But if you are not sure if it is an existing word, you should respond 'no'.
        You have as much time as you like for each decision.
        Press space bar to start.
    CodeComponent startup_Code
      Code Type = Py
      Begin Experiment:
        if expInfo['session'] == 'A':
            conditionPrac="data/processed_data/exp_files/pracCondA.csv"
            conditionExp="data/processed_data/exp_files/expCondA.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondA.csv"
            practice = "practiceListA"
            experiment = "stimuliListA"
        elif expInfo['session'] == 'B':
            conditionPrac="data/processed_data/exp_files/pracCondB.csv"
            conditionExp="data/processed_data/exp_files/expCondB.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondB.csv"
            practice = "practiceListB"
            experiment = "stimuliListB"
        elif expInfo['session'] == 'C':
            conditionPrac="data/processed_data/exp_files/pracCondC.csv"
            conditionExp="data/processed_data/exp_files/expCondC.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondC.csv"
            practice = "practiceListC"
            experiment = "stimuliListC"
        else:
            conditionPrac="data/processed_data/exp_files/pracCondD.csv"
            conditionExp="data/processed_data/exp_files/expCondD.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondD.csv"
            practice = "practiceListD"
            experiment = "stimuliListD"
  Routine lexTaleEsp
    TextComponent esp_Word
      color = black
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent esp_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent esp_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEsp_key_resp
      allowedKeys = '0','1'
      correctAns = $corrAnsEspV
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
  Routine lexTaleEng
    TextComponent eng_Word
      color = black
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent eng_Yes
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent eng_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEng_key_resp
      allowedKeys = '0','1'
      correctAns = $corrAnsEngV
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
  Routine gracias
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas Gracias!
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Flow
  Routine lexEspInstrucciones
  LoopInitiator lexEspLoop loopType="TrialHandler"
    conditionsFile = data/original_data/exp_files/lexTaleListEsp.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 0), ('Word', 'pladeno'), ('Translation', 'NW'), ('corrAnsEspV', 0)]),
      OrderedDict([('Order', 0), ('Word', 'delantera'), ('Translation', 'first position'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 0), ('Word', 'garbardina'), ('Translation', 'raincoat'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 1), ('Word', 'terzo'), ('Translation', 'NW'), ('corrAnsEspV', 0)]),
      OrderedDict([('Order', 2), ('Word', 'pellizcar'), ('Translation', 'pinch'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 3), ('Word', 'pulmones'), ('Translation', 'lungs'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 4), ('Word', 'batillón'), ('Translation', 'NW'), ('corrAnsEspV', 0)]),
      OrderedDict([('Order', 5), ('Word', 'zapato'), ('Translation', 'shoe'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 6), ('Word', 'tergiversar'), ('Translation', 'distort'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 7), ('Word', 'pésimo'), ('Translation', 'abysmal'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 8), ('Word', 'cadeña'), ('Translation', 'NW'), ('corrAnsEspV', 0)]),
      OrderedDict([('Order', 9), ('Word', 'hacha'), ('Translation', 'axe'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 10), ('Word', 'antar'), ('Translation', 'NW'), ('corrAnsEspV', 0)]),
      OrderedDict([('Order', 11), ('Word', 'cenefa'), ('Translation', 'edging'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 12), ('Word', 'asesinato'), ('Translation', 'murder'), ('corrAnsEspV', 1)])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
    Routine lexTaleEsp
  LoopTerminator lexEspLoop
  Routine pracIns
  LoopInitiator pracTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = $conditionPrac
    loopType = sequential
    nReps = 8
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    Routine target
    LoopInitiator pracTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $conditionPrac
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator pracTrialLoop
  LoopTerminator pracTarLoop
  Routine expIns
  LoopInitiator expTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = $conditionExp
    loopType = sequential
    nReps = 48
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    Routine targetExp
    LoopInitiator expTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $conditionExp
      loopType = random
      nReps = 1
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      Routine trialExp
    LoopTerminator expTrialLoop
  LoopTerminator expTarLoop
  Routine syllablePracIns
  LoopInitiator sylPracLoop loopType="TrialHandler"
    conditionsFile = $conditionSylPrac
    loopType = random
    nReps = 1
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    Routine syllablePracTrial
  LoopTerminator sylPracLoop
  Routine syllableExpIns
  LoopInitiator syllableLoop loopType="TrialHandler"
    conditionsFile = $conditionSylExp
    loopType = random
    nReps = 1
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    Routine trialSyllable
  LoopTerminator syllableLoop
  Routine lexTaleEngInstructions
  LoopInitiator lexEngLoop loopType="TrialHandler"
    conditionsFile = data/original_data/exp_files/lexTaleListEng.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 0), ('Word', 'platery'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 0), ('Word', 'denial'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 0), ('Word', 'generic'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 1), ('Word', 'mensible'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 2), ('Word', 'scornful'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 3), ('Word', 'stoutly'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 4), ('Word', 'ablaze'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 5), ('Word', 'kermshaw'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 6), ('Word', 'moonlit'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 7), ('Word', 'lofty'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 8), ('Word', 'hurricane'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 9), ('Word', 'flaw'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 10), ('Word', 'alberation'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 11), ('Word', 'unkempt'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 12), ('Word', 'breeding'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 13), ('Word', 'festivity'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 14), ('Word', 'screech'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 15), ('Word', 'savory'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 16), ('Word', 'plaudate'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 17), ('Word', 'shin'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 18), ('Word', 'fluid'), ('corrAnsEngV', 1)])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
    Routine lexTaleEng
  LoopTerminator lexEngLoop
  Routine gracias
